<Synthesis>
  <Metadata description="Source-grounded protocol representation; hardware execution requires compilation and review." publication="https://chemrxiv.org/engage/chemrxiv/article-details/60c9e3f37792a23bfdb2d471" reaction_class="1.3.1 [N-arylation with Ar-X] Bromo Buchwald-Hartwig amination"/>
  <Hardware>
    <!--Analysis binding: {"component": "column", "params": {}, "verified": false, "wetted_materials": null}-->
    <Component id="column" type="column"/>
    <!--Analysis binding: {"component": "filter", "params": {"capacity_mL": null}, "verified": false, "wetted_materials": null}-->
    <Component id="filter" type="filter"/>
    <!--Analysis binding: {"component": "filtrate", "params": {}, "verified": false, "wetted_materials": null}-->
    <Component id="filtrate" type="reactor"/>
    <!--Analysis binding: {"component": "heater", "params": {"T_max_C": 310, "T_min_C": null, "rpm_max": 1500, "rpm_min": 50}, "verified": false, "wetted_materials": []}-->
    <Component id="heater" type="heater"/>
    <!--Analysis binding: {"component": "light", "params": {"power_max_W": null, "wavelength_max_nm": null, "wavelength_min_nm": null}, "verified": false, "wetted_materials": []}-->
    <Component id="light" type="light"/>
    <!--Analysis binding: {"component": "product", "params": {}, "verified": false, "wetted_materials": null}-->
    <Component id="product" type="reactor"/>
    <!--Analysis binding: {"component": "reactor", "params": {"T_max_C": null, "T_min_C": null, "capacity_mL": null, "pressure_max_bar": null}, "verified": false, "wetted_materials": null}-->
    <Component id="reactor" type="reactor"/>
  </Hardware>
  <Reagents>
    <!--r1: C(=O)([O-])[O-].[Cs+].[Cs+]-->
    <Reagent name="r1" role="reagent"/>
    <!--r2: CC1=CC=CC=C1-->
    <Reagent name="r2" role="solvent"/>
    <!--r3: CC(C)(C)OC(=O)N1CCNCC1-->
    <Reagent name="r3" role="substrate"/>
    <!--r4: CC(=O)C1=CC=C(C=C1)Br-->
    <Reagent name="r4" role="substrate"/>
    <!--r5: C1=CC=C(C=C1)P(C2=CC=CC=C2)C3=C(C4=CC=CC=C4C=C3)C5=C(C=CC6=CC=CC=C65)P(C7=CC=CC=C7)C8=CC=CC=C8-->
    <Reagent name="r5" role="catalyst"/>
    <!--r6: CC(=O)O.CC(=O)O.[Pd]-->
    <Reagent name="r6" role="catalyst"/>
  </Reagents>
  <Procedure>
    <!--Analysis context: {"pressure_control": "UNKNOWN", "reflux": false}-->
    <!--p-Bromoacetophenone (729 ml, 6.03 mmol)-->
    <Add vessel="reactor" reagent="r4" amount="6.03 mmol"/>
    <!--tert-Butyl 1-piperazinecarboxylate (1.684 g, 9.04 mmol)-->
    <Add vessel="reactor" reagent="r3" amount="9.04 mmol"/>
    <!--racemic-2,2'-Bis(diphenylphosphino)-1,1'-binaphthyl (0.375 g, 0.60 mmol)-->
    <Add vessel="reactor" reagent="r5" amount="0.603 mmol"/>
    <!--Palladium (II) acetate (0.135 g, 0.60 mmol)-->
    <Add vessel="reactor" reagent="r6" amount="0.603 mmol"/>
    <!--Cesium carbonate (3.93 g, 12.06 mmol)-->
    <Add vessel="reactor" reagent="r1" amount="12.1 mmol"/>
    <!--was taken in toluene (10 ml)-->
    <Add vessel="reactor" reagent="r2" amount="10 mL"/>
    <!--The RM was subjected to MW power of 300W,temp 120°C for 45 minutes.-->
    <Irradiate vessel="reactor" time="2700 s"/>
    <!--The RM was passed through hyflow bed-->
    <Filter vessel="reactor" filtrate_vessel="filtrate"/>
    <!--filtrate was evaporated-->
    <Evaporate vessel="reactor"/>
    <!--chrmatographed using Ethyl acetate hexane-->
    <RunColumn from_vessel="reactor" to_vessel="product" column="column"/>
  </Procedure>
</Synthesis>
