<Synthesis>
  <Metadata description="Authored symbolic control; not an observed experiment." publication="" reaction_class="authored_rule_fixture"/>
  <Hardware>
    <!--Analysis binding: {"component": "filter", "params": {}, "verified": true, "wetted_materials": null}-->
    <Component id="filter" type="filter"/>
    <!--Analysis binding: {"component": "heater", "params": {"T_max_C": 200, "T_min_C": -100, "rpm_max": 1500, "rpm_min": 50}, "verified": true, "wetted_materials": null}-->
    <Component id="heater" type="heater"/>
    <!--Analysis binding: {"component": "product", "params": {"capacity_mL": 108}, "verified": true, "wetted_materials": null}-->
    <Component id="product" type="reactor"/>
    <!--Analysis binding: {"component": "reactor", "params": {"capacity_mL": 108}, "verified": true, "wetted_materials": ["PTFE"]}-->
    <Component id="reactor" type="reactor"/>
  </Hardware>
  <Reagents>
    <!--r1: ethanol-->
    <Reagent name="r1" role="solvent"/>
    <!--r2: reference substrate-->
    <Reagent name="r2" role="substrate"/>
    <!--r3: reference catalyst-->
    <Reagent name="r3" role="catalyst"/>
  </Reagents>
  <Procedure>
    <!--Analysis context: {"ignition_source": true, "pressure_control": "OPEN", "purpose": "rule_fixture", "reflux": false, "vapor_exposed": true}-->
    <!--Pressure-control context: OPEN-->
    <Add vessel="reactor" reagent="r1" amount="18 mL"/>
    <Add vessel="reactor" reagent="r2" amount="0.18 mmol"/>
    <Add vessel="reactor" reagent="r3" amount="0.01 mmol"/>
    <HeatChill vessel="reactor" temp="25.8 °C" time="608 s" stir_speed="308"/>
  </Procedure>
</Synthesis>
