<Synthesis>
  <Metadata description="Source-grounded protocol representation; hardware execution requires compilation and review." publication="https://huggingface.co/datasets/open-reaction-database/ord-data/resolve/b6c89761dacf809d4082acbdbebe72042a08db91/data/46/ord_dataset-46ff9a32d9e04016b9380b1b1ef949c3.parquet" reaction_class="Buckwald-Hartwig amination"/>
  <Hardware>
    <!--Analysis binding: {"component": "heater", "params": {"T_max_C": 310, "T_min_C": null, "rpm_max": 1500, "rpm_min": 50}, "verified": false, "wetted_materials": []}-->
    <Component id="heater" type="heater"/>
    <!--Analysis binding: {"component": "reactor", "params": {"capacity_mL": 0.0125, "reported_volume_mL": 0.0125, "well_capacity_mL": 0.0125}, "verified": false, "wetted_materials": ["cyclic_olefin_copolymer"]}-->
    <Component id="reactor" type="reactor"/>
  </Hardware>
  <Reagents>
    <!--r1: c1ccc(CN(Cc2ccccc2)c2ccon2)cc1-->
    <Reagent name="r1" role="reagent"/>
    <!--r2: DMSO-->
    <Reagent name="r2" role="solvent"/>
    <!--r3: COc1ccc(Br)cc1-->
    <Reagent name="r3" role="substrate"/>
    <!--r4: DMSO-->
    <Reagent name="r4" role="solvent"/>
    <!--r5: P2Et-->
    <Reagent name="r5" role="reagent"/>
    <!--r6: DMSO-->
    <Reagent name="r6" role="solvent"/>
    <!--r7: AdBrettPhos-->
    <Reagent name="r7" role="catalyst"/>
    <!--r8: DMSO-->
    <Reagent name="r8" role="solvent"/>
    <!--r9: Cc1ccc(N)cc1-->
    <Reagent name="r9" role="substrate"/>
    <!--r10: DMSO-->
    <Reagent name="r10" role="solvent"/>
  </Reagents>
  <Procedure>
    <!--Analysis context: {"pressure_control": "SEALED", "reflux": false}-->
    <!--Pressure-control context: SEALED-->
    <!--Atmosphere context (no purge operation inferred): nitrogen; environment-->
    <Add vessel="reactor" reagent="r1" amount="0.0001 mmol"/>
    <Add vessel="reactor" reagent="r10" amount="0.0002 mL"/>
    <Add vessel="reactor" reagent="r2" amount="0.0002 mL"/>
    <Add vessel="reactor" reagent="r3" amount="0.0001 mmol"/>
    <Add vessel="reactor" reagent="r4" amount="0.0002 mL"/>
    <Add vessel="reactor" reagent="r5" amount="0.00015 mmol"/>
    <Add vessel="reactor" reagent="r6" amount="0.0002 mL"/>
    <Add vessel="reactor" reagent="r7" amount="1e-05 mmol"/>
    <Add vessel="reactor" reagent="r8" amount="0.0002 mL"/>
    <Add vessel="reactor" reagent="r9" amount="0.0001 mmol"/>
    <HeatChill vessel="reactor" temp="60 °C" time="57600 s"/>
  </Procedure>
</Synthesis>
