<Synthesis>
  <Metadata description="Source-grounded protocol representation; hardware execution requires compilation and review." publication="https://huggingface.co/datasets/open-reaction-database/ord-data/resolve/b6c89761dacf809d4082acbdbebe72042a08db91/data/46/ord_dataset-46ff9a32d9e04016b9380b1b1ef949c3.parquet" reaction_class="Buckwald-Hartwig amination"/>
  <Hardware>
    <!--Analysis binding: {"component": "heater", "params": {"T_max_C": 310, "T_min_C": null, "rpm_max": 1500, "rpm_min": 50}, "verified": false, "wetted_materials": []}-->
    <Component id="heater" type="heater"/>
    <!--Analysis binding: {"component": "reactor", "params": {"capacity_mL": 0.0125, "reported_volume_mL": 0.0125, "well_capacity_mL": 0.0125}, "verified": false, "wetted_materials": ["cyclic_olefin_copolymer"]}-->
    <Component id="reactor" type="reactor"/>
  </Hardware>
  <Reagents>
    <!--r1: DMSO-->
    <Reagent name="r1" role="solvent"/>
    <!--r2: COc1ccc(I)cc1-->
    <Reagent name="r2" role="substrate"/>
    <!--r3: DMSO-->
    <Reagent name="r3" role="solvent"/>
    <!--r4: MTBD-->
    <Reagent name="r4" role="reagent"/>
    <!--r5: DMSO-->
    <Reagent name="r5" role="solvent"/>
    <!--r6: t-BuBrettPhos-->
    <Reagent name="r6" role="catalyst"/>
    <!--r7: DMSO-->
    <Reagent name="r7" role="solvent"/>
    <!--r8: Cc1ccc(N)cc1-->
    <Reagent name="r8" role="substrate"/>
    <!--r9: DMSO-->
    <Reagent name="r9" role="solvent"/>
  </Reagents>
  <Procedure>
    <!--Analysis context: {"pressure_control": "SEALED", "reflux": false}-->
    <!--Pressure-control context: SEALED-->
    <!--Atmosphere context (no purge operation inferred): nitrogen; environment-->
    <Add vessel="reactor" reagent="r1" amount="0.0002 mL"/>
    <Add vessel="reactor" reagent="r2" amount="0.0001 mmol"/>
    <Add vessel="reactor" reagent="r3" amount="0.0002 mL"/>
    <Add vessel="reactor" reagent="r4" amount="0.00015 mmol"/>
    <Add vessel="reactor" reagent="r5" amount="0.0002 mL"/>
    <Add vessel="reactor" reagent="r6" amount="1e-05 mmol"/>
    <Add vessel="reactor" reagent="r7" amount="0.0002 mL"/>
    <Add vessel="reactor" reagent="r8" amount="0.0001 mmol"/>
    <Add vessel="reactor" reagent="r9" amount="0.0002 mL"/>
    <HeatChill vessel="reactor" temp="60 °C" time="57600 s"/>
  </Procedure>
</Synthesis>
