<?xdl version="0.2.0" ?>

<Synthesis>
  <Hardware>
    <Component
      id="cartridge_celite"
      type="cartridge"
      chemical="celite" />
    <Component
      id="reactor"
      type="reactor" />
    <Component
      id="rotavap"
      type="rotavap" />
  </Hardware>

  <Reagents>
    <Reagent
      name="1,3-bis(2,6-diisopropylphenyl)-2- chloroimidazolium chloride" />
    <Reagent
      name="acetonitrile" />
    <Reagent
      name="dichloromethane" />
    <Reagent
      name="diethyl ether" />
    <Reagent
      name="potassium fluoride" />
    <Reagent
      name="potassium tetrafluoroborate" />
  </Reagents>

  <Procedure>
    <Add
      reagent="potassium fluoride"
      vessel="reactor"
      mass="0.38 g"
      stir="False" />
    <Add
      reagent="potassium tetrafluoroborate"
      vessel="reactor"
      mass="1.35 g"
      stir="False" />
    <Add
      reagent="1,3-bis(2,6-diisopropylphenyl)-2- chloroimidazolium chloride"
      vessel="reactor"
      mass="1 g"
      stir="False" />
    <Dry
      vessel="reactor"
      time="2 hrs" />
    <Add
      reagent="acetonitrile"
      vessel="reactor"
      volume="18 mL"
      stir="False" />
    <HeatChill
      vessel="reactor"
      temp="80°C"
      time="16 hrs"
      stir_speed="600 RPM" />
    <HeatChillToTemp
      vessel="reactor"
      temp="25°C" />
    <FilterThrough
      from_vessel="reactor"
      to_vessel="rotavap"
      through="celite"
      eluting_solvent="dichloromethane"
      eluting_volume="15 mL"
      eluting_repeats="3" />
    <Evaporate
      vessel="rotavap"
      temp="50°C"
      pressure="426 mbar"
      time="30 mins"
      mode="auto" />
    <Dissolve
      vessel="rotavap"
      solvent="dichloromethane"
      volume="30 mL" />
    <FilterThrough
      from_vessel="rotavap"
      to_vessel="rotavap"
      through="celite"
      eluting_solvent="dichloromethane"
      eluting_volume="15 mL"
      eluting_repeats="3" />
    <Evaporate
      vessel="rotavap"
      temp="50°C"
      pressure="699 mbar"
      time="30 mins"
      mode="auto" />
    <WashSolid
      vessel="rotavap"
      solvent="diethyl ether"
      volume="15 mL"
      repeats="3" />
  </Procedure>

</Synthesis>
