<?xdl version="0.4.2" ?>

<Synthesis>
  <Hardware>
    <Component
      id="cartridge_magnesium sulphate"
      type="cartridge"
      chemical="magnesium sulphate" />
    <Component
      id="reactor"
      type="reactor" />
    <Component
      id="rotavap"
      type="rotavap" />
    <Component
      id="separator"
      type="separator" />
  </Hardware>

  <Reagents>
    <Reagent
      name="brine" />
    <Reagent
      name="cinnamaldehyde" />
    <Reagent
      name="ether" />
    <Reagent
      name="iodoform THF solution" />
    <Reagent
      name="potassium t-butoxide" />
    <Reagent
      name="triphenylphosphine" />
  </Reagents>

  <Procedure>
    <Add
      reagent="iodoform THF solution"
      vessel="reactor"
      volume="0" />
    <Add
      reagent="triphenylphosphine"
      vessel="reactor"
      volume="0" />
    <Add
      reagent="potassium t-butoxide"
      vessel="reactor"
      volume="0" />
    <Stir
      vessel="reactor"
      time="60 secs" />
    <Add
      reagent="cinnamaldehyde"
      vessel="reactor"
      volume="0" />
    <Stir
      vessel="reactor"
      time="15 mins" />
    <HeatChillToTemp
      vessel="reactor"
      temp="-78°C"
      stir="True" />
    <Add
      reagent="potassium t-butoxide"
      vessel="reactor"
      volume="0" />
    <Stir
      vessel="reactor"
      time="5 mins" />
    <Add
      reagent="brine"
      vessel="reactor"
      volume="0" />
    <Separate
      purpose="extract"
      from_vessel="reactor"
      separation_vessel="separator"
      to_vessel="rotavap"
      product_phase="top"
      solvent="ether"
      through="magnesium sulphate"
      solvent_volume="25 mL"
      repeats="2" />
    <Evaporate
      vessel="rotavap"
      time="30 mins"
      mode="auto" />
    <RunColumn
      from_vessel="rotavap"
      to_vessel="reactor"
      column="column" />
  </Procedure>

</Synthesis>
