<?xdl version="0.4.2" ?>

<Synthesis>
  <Hardware>
    <Component
      id="cartridge_Na2SO4"
      type="cartridge"
      chemical="Na2SO4" />
    <Component
      id="reactor"
      type="reactor" />
    <Component
      id="rotavap"
      type="rotavap" />
    <Component
      id="separator"
      type="separator" />
  </Hardware>

  <Reagents>
    <Reagent
      name="2-(3,4-Dimethoxyphenyl)ethylamine" />
    <Reagent
      name="CH2Cl2" />
    <Reagent
      name="EtOAc" />
    <Reagent
      name="NEt3" />
    <Reagent
      name="aqueous HCl" />
    <Reagent
      name="brine" />
    <Reagent
      name="pent-4-enoyl chloride 6" />
  </Reagents>

  <Procedure>
    <Add
      reagent="2-(3,4-Dimethoxyphenyl)ethylamine"
      vessel="reactor"
      volume="15.2 mL" />
    <Add
      reagent="CH2Cl2"
      vessel="reactor"
      volume="90 mL"
      stir="True" />
    <Dissolve
      vessel="reactor"
      solvent="NEt3"
      volume="18.9 mL" />
    <HeatChillToTemp
      vessel="reactor"
      temp="0°C"
      stir="True" />
    <Add
      reagent="pent-4-enoyl chloride 6"
      vessel="reactor"
      mass="10.68 g"
      dispense_speed="3"
      stir="True" />
    <Stir
      vessel="reactor"
      time="30 mins" />
    <HeatChillToTemp
      vessel="reactor"
      temp="18°C"
      active="False"
      continue_heatchill="False"
      stir="True" />
    <Stir
      vessel="reactor"
      time="20 hrs" />
    <Transfer
      from_vessel="reactor"
      to_vessel="rotavap"
      volume="all" />
    <Evaporate
      vessel="rotavap"
      temp="50°C"
      pressure="699 mbar"
      time="30 mins"
      mode="auto" />
    <Dissolve
      vessel="rotavap"
      solvent="EtOAc"
      volume="300 mL" />
    <Transfer
      from_vessel="rotavap"
      to_vessel="separator"
      volume="all" />
    <Separate
      purpose="wash"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="separator"
      product_phase="top"
      solvent="aqueous HCl"
      solvent_volume="300 mL" />
    <Separate
      purpose="wash"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="rotavap"
      product_phase="top"
      solvent="brine"
      through="Na2SO4"
      solvent_volume="100 mL"
      waste_phase_to_vessel="separator" />
    <Evaporate
      vessel="rotavap"
      temp="50°C"
      pressure="153 mbar"
      time="30 mins"
      mode="auto" />
  </Procedure>

</Synthesis>
