<?xdl version="0.4.2" ?>

<Synthesis>
  <Hardware>
    <Component
      id="cartridge_K2CO3"
      type="cartridge"
      chemical="K2CO3" />
    <Component
      id="reactor"
      type="reactor" />
    <Component
      id="rotavap"
      type="rotavap" />
    <Component
      id="separator"
      type="separator" />
  </Hardware>

  <Reagents>
    <Reagent
      name="CH2Cl2" />
    <Reagent
      name="MeCN" />
    <Reagent
      name="N-(3,4-Dimethoxyphenethyl)pent-4-enamide" />
    <Reagent
      name="POCl3" />
    <Reagent
      name="aqueous saturated K2CO3 solution" />
  </Reagents>

  <Procedure>
    <Confirm
      msg="Is N- ( 3,4-Dimethoxyphenethyl ) pent-4-enamide ( 23.730 g , 90.0 mmol ) in the correct vessel?" />
    <Dissolve
      vessel="reactor"
      solvent="MeCN"
      volume="550 mL" />
    <HeatChillToTemp
      vessel="reactor"
      temp="23°C"
      stir="True" />
    <Add
      reagent="POCl3"
      vessel="reactor"
      volume="63.5 mL"
      stir="True" />
    <HeatChill
      vessel="reactor"
      temp="95°C"
      time="4 hrs"
      stir="True" />
    <HeatChillToTemp
      vessel="reactor"
      temp="25°C"
      stir="True" />
    <Transfer
      from_vessel="reactor"
      to_vessel="rotavap"
      volume="all" />
    <Evaporate
      vessel="rotavap"
      temp="50°C"
      pressure="153 mbar"
      time="30 mins"
      mode="auto" />
    <Transfer
      from_vessel="rotavap"
      to_vessel="reactor"
      volume="all" />
    <HeatChillToTemp
      vessel="reactor"
      temp="2°C"
      stir="True" />
    <Add
      reagent="aqueous saturated K2CO3 solution"
      vessel="reactor"
      volume="500 mL"
      dispense_speed="10"
      stir="True" />
    <StopHeatChill
      vessel="reactor" />
    <Separate
      purpose="extract"
      from_vessel="reactor"
      separation_vessel="separator"
      to_vessel="rotavap"
      product_phase="bottom"
      solvent="CH2Cl2"
      through="K2CO3"
      solvent_volume="200 mL"
      repeats="5" />
    <Evaporate
      vessel="rotavap"
      temp="50°C"
      pressure="699 mbar"
      time="30 mins"
      mode="auto" />
  </Procedure>

</Synthesis>
