<?xdl version="0.4.2" ?>

<Synthesis>
  <Hardware>
    <Component
      id="cartridge_magnesium sulfate"
      type="cartridge"
      chemical="magnesium sulfate" />
    <Component
      id="filter"
      type="filter" />
    <Component
      id="rotavap"
      type="rotavap" />
    <Component
      id="separator"
      type="separator" />
  </Hardware>

  <Reagents>
    <Reagent
      name="2-Iodobenzoic acid" />
    <Reagent
      name="25 % aqueous sodium thiosulfate" />
    <Reagent
      name="DMP" />
    <Reagent
      name="acetic anhydride" />
    <Reagent
      name="acetone" />
    <Reagent
      name="anhydrous ether" />
    <Reagent
      name="glacial acetic acid" />
    <Reagent
      name="menthol (31.25 g in 500 mL DCM) DCM solution" />
    <Reagent
      name="oxone deionized water solution" />
    <Reagent
      name="saturated aqueous sodium bicarbonate solution" />
    <Reagent
      name="the moist solid iodinane oxide" />
    <Reagent
      name="water" />
  </Reagents>

  <Procedure>
    <Add
      reagent="oxone deionized water solution"
      vessel="filter"
      volume="650 mL"
      stir="True"
      stir_speed="600 RPM" />
    <Add
      reagent="2-Iodobenzoic acid"
      vessel="filter"
      mass="50 g"
      stir="True"
      stir_speed="600 RPM" />
    <HeatChillToTemp
      vessel="filter"
      temp="71.5°C"
      stir="True" />
    <Stir
      vessel="filter"
      time="3 hrs" />
    <HeatChillToTemp
      vessel="filter"
      temp="5°C"
      stir="True" />
    <Stir
      vessel="filter"
      time="1.5 hrs"
      stir_speed="50 RPM" />
    <Filter
      vessel="filter" />
    <WashSolid
      vessel="filter"
      solvent="water"
      volume="100 mL"
      repeats="6" />
    <WashSolid
      vessel="filter"
      solvent="acetone"
      volume="100 mL"
      repeats="2" />
    <Dry
      vessel="filter"
      time="2 hrs"
      temp="25°C" />
    <Add
      reagent="the moist solid iodinane oxide"
      vessel="filter"
      mass="56 g" />
    <Add
      reagent="glacial acetic acid"
      vessel="filter"
      volume="96 mL" />
    <Add
      reagent="acetic anhydride"
      vessel="filter"
      volume="192 mL"
      stir="True" />
    <HeatChillToTemp
      vessel="filter"
      temp="85°C"
      stir="True" />
    <Stir
      vessel="filter"
      time="20 mins" />
    <StopStir
      vessel="filter" />
    <StopHeatChill
      vessel="filter" />
    <Wait
      time="24 hrs" />
    <Filter
      vessel="filter" />
    <WashSolid
      vessel="filter"
      solvent="anhydrous ether"
      volume="80 mL"
      repeats="3" />
    <Dry
      vessel="filter" />
    <Add
      reagent="DMP"
      vessel="filter"
      mass="51 g" />
    <Add
      reagent="menthol (31.25 g in 500 mL DCM) DCM solution"
      vessel="filter"
      volume="500 mL" />
    <Stir
      vessel="filter"
      time="30 mins" />
    <Add
      reagent="25 % aqueous sodium thiosulfate"
      vessel="filter"
      volume="234 mL"
      stir="True" />
    <Add
      reagent="saturated aqueous sodium bicarbonate solution"
      vessel="filter"
      volume="234 mL"
      stir="True" />
    <Stir
      vessel="filter"
      time="30 mins"
      stir_speed="600 RPM" />
    <Separate
      purpose="extract"
      from_vessel="filter"
      separation_vessel="separator"
      to_vessel="separator"
      product_phase="top"
      solvent="anhydrous ether"
      solvent_volume="700 mL" />
    <Separate
      purpose="wash"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="rotavap"
      product_phase="top"
      solvent="saturated aqueous sodium bicarbonate solution"
      through="magnesium sulfate"
      solvent_volume="468 mL"
      repeats="2" />
    <Evaporate
      vessel="rotavap"
      temp="50°C"
      pressure="768.5 mbar"
      time="30 mins"
      mode="auto" />
  </Procedure>

</Synthesis>
