<?xdl version="0.4.2" ?>

<Synthesis>
  <Hardware>
    <Component
      id="buffer_flask"
      type="buffer_flask" />
    <Component
      id="cartridge_calcium chloride"
      type="cartridge"
      chemical="calcium chloride" />
    <Component
      id="reactor"
      type="reactor" />
    <Component
      id="separator"
      type="separator" />
  </Hardware>

  <Reagents>
    <Reagent
      name="a mixture of 235 g ( 2.5 moles ) of phenol and 100 g ( 2.5 moles ) of sodium hydroxide in 1 l of water" />
    <Reagent
      name="benzene" />
    <Reagent
      name="dimethyl sulfate" />
    <Reagent
      name="water" />
  </Reagents>

  <Procedure>
    <Add
      reagent="a mixture of 235 g ( 2.5 moles ) of phenol and 100 g ( 2.5 moles ) of sodium hydroxide in 1 l of water"
      vessel="reactor"
      volume="1000 mL" />
    <HeatChillToTemp
      vessel="reactor"
      temp="7°C"
      stir="True" />
    <Add
      reagent="dimethyl sulfate"
      vessel="reactor"
      volume="235 mL"
      time="60 mins"
      stir="True" />
    <HeatChill
      vessel="reactor"
      temp="100°C"
      time="30 mins"
      stir="True" />
    <Add
      reagent="a mixture of 235 g ( 2.5 moles ) of phenol and 100 g ( 2.5 moles ) of sodium hydroxide in 1 l of water"
      vessel="reactor"
      volume="1000 mL"
      time="15 mins"
      stir="True" />
    <HeatChill
      vessel="reactor"
      temp="150°C"
      time="15 hrs"
      stir="True" />
    <HeatChillToTemp
      vessel="reactor"
      temp="25°C"
      stir="True" />
    <Separate
      purpose="extract"
      from_vessel="reactor"
      separation_vessel="separator"
      to_vessel="buffer_flask"
      product_phase="top"
      solvent=""
      waste_phase_to_vessel="separator" />
    <Separate
      purpose="extract"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="separator"
      product_phase="top"
      solvent="benzene"
      solvent_volume="200 mL" />
    <Transfer
      from_vessel="buffer_flask"
      to_vessel="separator"
      volume="all" />
    <Separate
      purpose="wash"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="reactor"
      product_phase="top"
      solvent="water"
      through="calcium chloride"
      solvent_volume="25 mL" />
    <Distill />
  </Procedure>

</Synthesis>
