<?xdl version="0.4.2" ?>

<Synthesis>
  <Hardware>
    <Component
      id="filter"
      type="filter" />
    <Component
      id="reactor"
      type="reactor" />
    <Component
      id="rotavap"
      type="rotavap" />
  </Hardware>

  <Reagents>
    <Reagent
      name="1 hexyne" />
    <Reagent
      name="4-dimethylaminopyridine" />
    <Reagent
      name="acetic anhydride" />
    <Reagent
      name="hexane" />
    <Reagent
      name="isopropyl alcohol" />
    <Reagent
      name="pentacarbonyl [ phenyl(methoxy)chromium ] carbene" />
    <Reagent
      name="silica gel" />
    <Reagent
      name="tetrahydrofuran" />
    <Reagent
      name="triethylamine" />
  </Reagents>

  <Procedure>
    <Add
      reagent="4-dimethylaminopyridine"
      vessel="reactor"
      mass="1.22 g" />
    <Add
      reagent="tetrahydrofuran"
      vessel="reactor"
      volume="500 mL" />
    <Add
      reagent="1 hexyne"
      vessel="reactor"
      volume="11 mL"
      stir="True" />
    <Add
      reagent="acetic anhydride"
      vessel="reactor"
      volume="13.2 mL"
      stir="True" />
    <Add
      reagent="triethylamine"
      vessel="reactor"
      volume="9.8 mL"
      stir="True" />
    <Add
      reagent="pentacarbonyl [ phenyl(methoxy)chromium ] carbene"
      vessel="reactor"
      mass="20 g"
      stir="True" />
    <Add
      reagent="tetrahydrofuran"
      vessel="reactor"
      volume="100 mL"
      stir="True" />
    <HeatChillToTemp
      vessel="reactor"
      temp="65°C"
      stir="True" />
    <Wait
      time="52.5 mins" />
    <HeatChillToTemp
      vessel="reactor"
      temp="25°C"
      stir="True" />
    <Transfer
      from_vessel="reactor"
      to_vessel="rotavap"
      volume="all" />
    <Add
      reagent="silica gel"
      vessel="rotavap"
      mass="30 g"
      stir="True" />
    <Evaporate
      vessel="rotavap"
      temp="50°C"
      pressure="249 mbar"
      time="30 mins"
      mode="auto" />
    <WashSolid
      vessel="rotavap"
      solvent="hexane"
      volume="100 mL"
      repeats="5" />
    <Evaporate
      vessel="rotavap"
      time="30 mins"
      mode="auto" />
    <Transfer
      from_vessel="rotavap"
      to_vessel="filter"
      volume="all" />
    <Add
      reagent="isopropyl alcohol"
      vessel="filter"
      volume="20 mL" />
    <Filter
      vessel="filter" />
    <Transfer
      from_vessel="filter"
      to_vessel="rotavap"
      volume="all" />
    <Evaporate
      vessel="rotavap"
      time="30 mins"
      mode="auto" />
    <RunColumn
      from_vessel="rotavap"
      to_vessel="rotavap"
      column="column" />
    <Evaporate
      vessel="rotavap"
      time="30 mins"
      mode="auto" />
  </Procedure>

</Synthesis>
