<?xdl version="0.4.2" ?>

<Synthesis>
  <Hardware>
    <Component
      id="cartridge_anhydrous magnesium sulfate(MgSO4)"
      type="cartridge"
      chemical="anhydrous magnesium sulfate(MgSO4)" />
    <Component
      id="reactor"
      type="reactor" />
    <Component
      id="rotavap"
      type="rotavap" />
    <Component
      id="separator"
      type="separator" />
  </Hardware>

  <Reagents>
    <Reagent
      name="6 M hydrochloric acid" />
    <Reagent
      name="benzyltriethylammonium chloride(TEBA)" />
    <Reagent
      name="chloroform" />
    <Reagent
      name="dichloromethane" />
    <Reagent
      name="ethyl vinyl ether" />
    <Reagent
      name="sodium hydroxide(NaOH) (12.0 g , 0.30 mol in 12 mL of H2O) water solution" />
    <Reagent
      name="water" />
  </Reagents>

  <Procedure>
    <Add
      reagent="ethyl vinyl ether"
      vessel="reactor"
      volume="9.55 mL" />
    <Add
      reagent="chloroform"
      vessel="reactor"
      volume="31.9 mL"
      stir="True" />
    <Add
      reagent="benzyltriethylammonium chloride(TEBA)"
      vessel="reactor"
      mass="0.1 g"
      stir="True" />
    <HeatChillToTemp
      vessel="reactor"
      temp="0°C"
      stir="True" />
    <Stir
      vessel="reactor"
      time="10 mins" />
    <Add
      reagent="sodium hydroxide(NaOH) (12.0 g , 0.30 mol in 12 mL of H2O) water solution"
      vessel="reactor"
      volume="12 mL"
      viscous="True"
      time="10 mins"
      stir="True"
      stir_speed="600 RPM" />
    <Stir
      vessel="reactor"
      time="2 hrs"
      stir_speed="600 RPM" />
    <HeatChill
      vessel="reactor"
      temp="25°C"
      time="22 hrs"
      stir="True"
      stir_speed="600 RPM" />
    <HeatChillToTemp
      vessel="reactor"
      temp="0°C"
      stir="True" />
    <Add
      reagent="6 M hydrochloric acid"
      vessel="reactor"
      volume="30 mL"
      time="10 mins"
      stir="True" />
    <Transfer
      from_vessel="reactor"
      to_vessel="separator"
      volume="all" />
    <Repeat
      repeats="2">
      <Add
        reagent="water"
        vessel="reactor"
        volume="20 mL"
        stir="True" />
      <Transfer
        from_vessel="reactor"
        to_vessel="separator"
        volume="all" />
    </Repeat>
    <Add
      reagent="dichloromethane"
      vessel="reactor"
      volume="30 mL"
      stir="True" />
    <Transfer
      from_vessel="reactor"
      to_vessel="separator"
      volume="all" />
    <Add
      reagent="water"
      vessel="separator"
      volume="60 mL"
      stir="True" />
    <Separate
      purpose="extract"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="rotavap"
      product_phase="bottom"
      solvent=""
      through="anhydrous magnesium sulfate(MgSO4)"
      waste_phase_to_vessel="separator" />
    <Separate
      purpose="extract"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="rotavap"
      product_phase="bottom"
      solvent="dichloromethane"
      through="anhydrous magnesium sulfate(MgSO4)"
      solvent_volume="60 mL"
      repeats="3" />
    <Evaporate
      vessel="rotavap"
      pressure="93.3254 mbar"
      time="30 mins"
      mode="auto" />
    <Add
      reagent="dichloromethane"
      vessel="rotavap"
      volume="2 mL" />
    <Distill />
  </Procedure>

</Synthesis>
