<?xdl version="0.4.2" ?>

<Synthesis>
  <Hardware>
    <Component
      id="buffer_flask"
      type="buffer_flask" />
    <Component
      id="cartridge_anhydrous magnesium sulfate"
      type="cartridge"
      chemical="anhydrous magnesium sulfate" />
    <Component
      id="filter"
      type="filter" />
    <Component
      id="reactor"
      type="reactor" />
    <Component
      id="rotavap"
      type="rotavap" />
    <Component
      id="separator"
      type="separator" />
  </Hardware>

  <Reagents>
    <Reagent
      name="1,1-dichloro-2-ethoxycyclopropane" />
    <Reagent
      name="absolute ethanol" />
    <Reagent
      name="copper sulfate(CuSO4) water solution" />
    <Reagent
      name="dichloromethane" />
    <Reagent
      name="pyridine" />
    <Reagent
      name="the MgSO4" />
    <Reagent
      name="the dichloromethane solution" />
    <Reagent
      name="water" />
  </Reagents>

  <Procedure>
    <Add
      reagent="absolute ethanol"
      vessel="reactor"
      volume="50 mL" />
    <Add
      reagent="pyridine"
      vessel="reactor"
      volume="7.33 mL"
      stir="True" />
    <Add
      reagent="1,1-dichloro-2-ethoxycyclopropane"
      vessel="reactor"
      mass="10.86 g"
      stir="True" />
    <HeatChill
      vessel="reactor"
      temp="95°C"
      time="48 hrs"
      stir="True" />
    <HeatChillToTemp
      vessel="reactor"
      temp="25°C"
      active="False"
      continue_heatchill="False"
      stir="True" />
    <Transfer
      from_vessel="reactor"
      to_vessel="rotavap"
      volume="all" />
    <Evaporate
      vessel="rotavap"
      temp="40°C"
      pressure="93.3254 mbar"
      time="30 mins"
      mode="auto" />
    <Transfer
      from_vessel="rotavap"
      to_vessel="separator"
      volume="all" />
    <Repeat
      repeats="2">
      <Add
        reagent="water"
        vessel="rotavap"
        volume="50 mL"
        stir="True" />
      <Transfer
        from_vessel="rotavap"
        to_vessel="separator"
        volume="all" />
    </Repeat>
    <Add
      reagent="dichloromethane"
      vessel="rotavap"
      volume="60 mL"
      stir="True" />
    <Transfer
      from_vessel="rotavap"
      to_vessel="separator"
      volume="all" />
    <Separate
      purpose="extract"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="buffer_flask"
      product_phase="bottom"
      solvent=""
      waste_phase_to_vessel="separator" />
    <Separate
      purpose="extract"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="separator"
      product_phase="bottom"
      solvent="dichloromethane"
      solvent_volume="50 mL"
      repeats="2" />
    <Transfer
      from_vessel="buffer_flask"
      to_vessel="separator"
      volume="all" />
    <Separate
      purpose="wash"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="filter"
      product_phase="bottom"
      solvent="copper sulfate(CuSO4) water solution"
      through="anhydrous magnesium sulfate"
      solvent_volume="100 mL"
      repeats="2" />
    <Add
      reagent="dichloromethane"
      vessel="filter"
      volume="15 mL" />
    <Stir
      vessel="filter"
      time="60 secs" />
    <Filter
      vessel="filter" />
    <Transfer
      from_vessel="filter"
      to_vessel="rotavap"
      volume="all" />
    <Evaporate
      vessel="rotavap"
      pressure="93.3254 mbar"
      time="30 mins"
      mode="auto" />
    <Transfer
      from_vessel="rotavap"
      to_vessel="reactor"
      volume="all" />
    <Add
      reagent="dichloromethane"
      vessel="reactor"
      volume="2 mL" />
    <HeatChillToTemp
      vessel="reactor"
      temp="-78°C"
      stir="True" />
    <Distill />
  </Procedure>

</Synthesis>
