<?xdl version="0.4.2" ?>

<Synthesis>
  <Hardware>
    <Component
      id="cartridge_MgSO4"
      type="cartridge"
      chemical="MgSO4" />
    <Component
      id="reactor"
      type="reactor" />
    <Component
      id="rotavap"
      type="rotavap" />
    <Component
      id="separator"
      type="separator" />
  </Hardware>

  <Reagents>
    <Reagent
      name="1 M HCl" />
    <Reagent
      name="1 M NaOH" />
    <Reagent
      name="benzylamine" />
    <Reagent
      name="dichloromethane" />
    <Reagent
      name="p-toluenesulfonyl chloride dichloromethane solution" />
    <Reagent
      name="saturated aqueous NaCl solution" />
    <Reagent
      name="triethylamine" />
  </Reagents>

  <Procedure>
    <Add
      reagent="benzylamine"
      vessel="reactor"
      volume="11.5 mL" />
    <Add
      reagent="triethylamine"
      vessel="reactor"
      volume="15.5 mL"
      stir="True" />
    <Add
      reagent="dichloromethane"
      vessel="reactor"
      volume="250 mL"
      stir="True" />
    <HeatChillToTemp
      vessel="reactor"
      temp="3°C"
      stir="True" />
    <Add
      reagent="p-toluenesulfonyl chloride dichloromethane solution"
      vessel="reactor"
      volume="100 mL"
      time="45 mins"
      stir="True" />
    <Stir
      vessel="reactor"
      time="30 mins" />
    <HeatChillToTemp
      vessel="reactor"
      temp="18°C"
      active="False"
      continue_heatchill="False"
      stir="True" />
    <HeatChill
      vessel="reactor"
      temp="21°C"
      time="13 hrs"
      stir="True" />
    <Add
      reagent="1 M HCl"
      vessel="reactor"
      volume="500 mL"
      stir="True" />
    <Transfer
      from_vessel="reactor"
      to_vessel="separator"
      volume="all" />
    <Separate
      purpose="extract"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="separator"
      product_phase="bottom"
      solvent="" />
    <Separate
      purpose="wash"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="separator"
      product_phase="bottom"
      solvent="1 M HCl"
      solvent_volume="500 mL" />
    <Separate
      purpose="wash"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="separator"
      product_phase="bottom"
      solvent="1 M NaOH"
      solvent_volume="500 mL" />
    <Separate
      purpose="wash"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="rotavap"
      product_phase="bottom"
      solvent="saturated aqueous NaCl solution"
      through="MgSO4"
      solvent_volume="500 mL" />
    <Evaporate
      vessel="rotavap"
      pressure="33.3305 mbar"
      time="30 mins"
      mode="auto" />
    <Dry
      vessel="rotavap"
      time="6 hrs"
      vacuum_pressure="0.2666 mbar" />
  </Procedure>

</Synthesis>
