<?xdl version="0.1.10" ?>

<Synthesis>
  <Hardware>
    <Component
      id="cartridge_anhydrous MgSO4"
      type="cartridge"
      chemical="anhydrous MgSO4" />
    <Component
      id="filter"
      type="filter" />
    <Component
      id="rotavap"
      type="rotavap" />
    <Component
      id="separator"
      type="separator" />
  </Hardware>

  <Reagents>
    <Reagent
      name="1 M HCl" />
    <Reagent
      name="acetophenone" />
    <Reagent
      name="brine" />
    <Reagent
      name="ethanol" />
    <Reagent
      name="ethyl acetate" />
    <Reagent
      name="hydroxylamine hydrochloride" />
    <Reagent
      name="pyridine" />
    <Reagent
      name="water" />
  </Reagents>

  <Procedure>
    <Add
      reagent="acetophenone"
      vessel="filter"
      volume="9.33 mL"
      stir="False" />
    <Add
      reagent="pyridine"
      vessel="filter"
      volume="18 mL"
      stir="True" />
    <Add
      reagent="ethanol"
      vessel="filter"
      volume="40 mL"
      stir="True" />
    <Add
      reagent="hydroxylamine hydrochloride"
      vessel="filter"
      mass="8.33 g"
      stir="True" />
    <HeatChill
      vessel="filter"
      temp="60°C"
      time="1.25 hrs" />
    <HeatChillToTemp
      vessel="filter"
      temp="22°C" />
    <Add
      reagent="water"
      vessel="filter"
      volume="80 mL"
      stir="True" />
    <Separate
      purpose="extract"
      from_vessel="filter"
      separation_vessel="separator"
      to_vessel="separator"
      product_phase="top"
      solvent="ethyl acetate"
      from_port="bottom"
      to_port="top"
      solvent_volume="80 mL"
      repeats="2" />
    <Separate
      purpose="wash"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="separator"
      product_phase="top"
      solvent="1 M HCl"
      to_port="top"
      solvent_volume="50 mL"
      repeats="1" />
    <Separate
      purpose="wash"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="filter"
      product_phase="top"
      solvent="brine"
      through="anhydrous MgSO4"
      to_port="top"
      solvent_volume="50 mL"
      repeats="1" />
    <Filter
      vessel="filter" />
    <Transfer
      from_vessel="filter"
      to_vessel="rotavap"
      volume="all"
      from_port="bottom"
      to_port="evaporate" />
    <Evaporate
      vessel="rotavap"
      time="30 mins"
      mode="auto" />
  </Procedure>

</Synthesis>
