<?xdl version="0.4.2" ?>

<Synthesis>
  <Hardware>
    <Component
      id="cartridge_Na2SO4"
      type="cartridge"
      chemical="Na2SO4" />
    <Component
      id="reactor"
      type="reactor" />
    <Component
      id="rotavap"
      type="rotavap" />
    <Component
      id="separator"
      type="separator" />
  </Hardware>

  <Reagents>
    <Reagent
      name="1 hexyne" />
    <Reagent
      name="N-Hydroxy-N-phenylacetamide" />
    <Reagent
      name="THF" />
    <Reagent
      name="chloro [ tris(2,4-di-tert-butylphenyl)phosphite ] gold(I)" />
    <Reagent
      name="dichloromethane" />
    <Reagent
      name="saturated sodium bicarbonate solution" />
    <Reagent
      name="silica gel" />
    <Reagent
      name="silver bis(trifluoromethanesulfonyl)imide" />
    <Reagent
      name="toluene" />
    <Reagent
      name="zinc trifluoromethanesulfonate" />
  </Reagents>

  <Procedure>
    <Add
      reagent="toluene"
      vessel="reactor"
      volume="80 mL" />
    <Add
      reagent="N-Hydroxy-N-phenylacetamide"
      vessel="reactor"
      mass="6.046 g"
      stir="True" />
    <Add
      reagent="1 hexyne"
      vessel="reactor"
      volume="6.5 mL"
      stir="True" />
    <Add
      reagent="zinc trifluoromethanesulfonate"
      vessel="reactor"
      mass="0.731 g"
      stir="True" />
    <Add
      reagent="chloro [ tris(2,4-di-tert-butylphenyl)phosphite ] gold(I)"
      vessel="reactor"
      mass="0.176 g"
      stir="True" />
    <Add
      reagent="silver bis(trifluoromethanesulfonyl)imide"
      vessel="reactor"
      mass="78 mg"
      stir="True" />
    <HeatChillToTemp
      vessel="reactor"
      temp="60°C"
      stir="True" />
    <Stir
      vessel="reactor"
      time="24 hrs" />
    <Add
      reagent="THF"
      vessel="reactor"
      volume="10 mL"
      stir="True" />
    <Add
      reagent="THF"
      vessel="reactor"
      volume="10 mL"
      stir="True"
      repeats="2" />
    <Separate
      purpose="wash"
      from_vessel="reactor"
      separation_vessel="separator"
      to_vessel="rotavap"
      product_phase="top"
      solvent="saturated sodium bicarbonate solution"
      through="Na2SO4"
      solvent_volume="50 mL"
      waste_phase_to_vessel="separator" />
    <Separate
      purpose="extract"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="rotavap"
      product_phase="bottom"
      solvent="dichloromethane"
      through="Na2SO4"
      solvent_volume="10 mL"
      repeats="3" />
    <Evaporate
      vessel="rotavap"
      temp="40°C"
      pressure="39.9966 mbar"
      time="30 mins"
      mode="auto" />
    <Dry
      vessel="rotavap"
      time="4 hrs"
      pressure="1.3332 mbar" />
    <Dissolve
      vessel="rotavap"
      solvent="dichloromethane"
      volume="20 mL" />
    <Add
      reagent="silica gel"
      vessel="rotavap"
      mass="10 g"
      stir="True" />
    <Evaporate
      vessel="rotavap"
      temp="30°C"
      pressure="399.966 mbar"
      time="30 mins"
      mode="auto" />
    <RunColumn
      from_vessel="rotavap"
      to_vessel="rotavap"
      column="column" />
    <Evaporate
      vessel="rotavap"
      temp="30°C"
      pressure="59.9949 mbar"
      time="30 mins"
      mode="auto" />
    <Dry
      vessel="rotavap"
      time="10 hrs"
      pressure="1.3332 mbar" />
  </Procedure>

</Synthesis>
