<?xdl version="0.4.2" ?>

<Synthesis>
  <Hardware>
    <Component
      id="cartridge_MgSO4"
      type="cartridge"
      chemical="MgSO4" />
    <Component
      id="reactor"
      type="reactor" />
    <Component
      id="rotavap"
      type="rotavap" />
    <Component
      id="separator"
      type="separator" />
  </Hardware>

  <Reagents>
    <Reagent
      name="ethyl acetate" />
    <Reagent
      name="furfural" />
    <Reagent
      name="phenylmagnesium bromide (1M in THF)" />
    <Reagent
      name="saturated aqueous ammonium chloride" />
  </Reagents>

  <Procedure>
    <HeatChillToTemp
      vessel="reactor"
      temp="5°C"
      stir="True" />
    <Add
      reagent="phenylmagnesium bromide (1M in THF)"
      vessel="reactor"
      volume="57.4 mL" />
    <HeatChillToTemp
      vessel="reactor"
      temp="22°C"
      stir="True" />
    <Add
      reagent="furfural"
      vessel="reactor"
      volume="4.76 mL"
      time="30 mins"
      stir="True" />
    <StopHeatChill
      vessel="reactor" />
    <Stir
      vessel="reactor"
      time="4 hrs" />
    <Add
      reagent="saturated aqueous ammonium chloride"
      vessel="reactor"
      volume="100 mL"
      stir="True"
      repeats="1" />
    <Transfer
      from_vessel="reactor"
      to_vessel="separator"
      volume="all" />
    <Separate
      purpose="extract"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="rotavap"
      product_phase="top"
      solvent="ethyl acetate"
      through="MgSO4"
      solvent_volume="100 mL"
      repeats="3" />
    <Evaporate
      vessel="rotavap"
      time="30 mins"
      mode="auto" />
    <RunColumn
      from_vessel="rotavap"
      to_vessel="reactor"
      column="column" />
  </Procedure>

</Synthesis>
