<?xdl version="0.4.2" ?>

<Synthesis>
  <Hardware>
    <Component
      id="cartridge_MgSO4"
      type="cartridge"
      chemical="MgSO4" />
    <Component
      id="reactor"
      type="reactor" />
    <Component
      id="rotavap"
      type="rotavap" />
    <Component
      id="separator"
      type="separator" />
  </Hardware>

  <Reagents>
    <Reagent
      name="2,4,6-trimethylaniline" />
    <Reagent
      name="acetonitrile" />
    <Reagent
      name="dysprosium" />
    <Reagent
      name="ethyl acetate" />
    <Reagent
      name="furan-2-yl(phenyl)methanol" />
    <Reagent
      name="saturated aqueous sodium bicarbonate" />
  </Reagents>

  <Procedure>
    <Add
      reagent="furan-2-yl(phenyl)methanol"
      vessel="reactor"
      mass="3.95 g" />
    <Add
      reagent="acetonitrile"
      vessel="reactor"
      volume="200 mL" />
    <Add
      reagent="2,4,6-trimethylaniline"
      vessel="reactor"
      mass="2.78 g"
      stir="True" />
    <Add
      reagent="dysprosium"
      vessel="reactor"
      mass="0.628 g"
      stir="True" />
    <HeatChillToTemp
      vessel="reactor"
      temp="80°C"
      stir="True" />
    <Stir
      vessel="reactor"
      time="4 hrs" />
    <StopStir
      vessel="reactor" />
    <HeatChillToTemp
      vessel="reactor"
      temp="25°C"
      active="False"
      continue_heatchill="False"
      stir="True" />
    <Add
      reagent="saturated aqueous sodium bicarbonate"
      vessel="reactor"
      volume="150 mL"
      stir="True"
      repeats="1" />
    <Transfer
      from_vessel="reactor"
      to_vessel="separator"
      volume="all" />
    <Separate
      purpose="extract"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="rotavap"
      product_phase="bottom"
      solvent="ethyl acetate"
      through="MgSO4"
      solvent_volume="150 mL"
      repeats="3" />
    <Evaporate
      vessel="rotavap"
      pressure="13.3322 mbar"
      time="30 mins"
      mode="auto" />
    <RunColumn
      from_vessel="rotavap"
      to_vessel="reactor"
      column="column" />
  </Procedure>

</Synthesis>
