<?xdl version="0.4.2" ?>

<Synthesis>
  <Hardware>
    <Component
      id="cartridge_alumina"
      type="cartridge"
      chemical="alumina" />
    <Component
      id="reactor"
      type="reactor" />
    <Component
      id="rotavap"
      type="rotavap" />
    <Component
      id="separator"
      type="separator" />
  </Hardware>

  <Reagents>
    <Reagent
      name="4-dimethyl-aminopyridine" />
    <Reagent
      name="N,N-dibenzylhydroxylamine" />
    <Reagent
      name="deionized water" />
    <Reagent
      name="dichloromethane" />
    <Reagent
      name="pivaloyl chloride" />
    <Reagent
      name="saturated aqueous ammonium chloride" />
  </Reagents>

  <Procedure>
    <Add
      reagent="N,N-dibenzylhydroxylamine"
      vessel="reactor"
      mass="21.3 g" />
    <Add
      reagent="4-dimethyl-aminopyridine"
      vessel="reactor"
      mass="12.8 g" />
    <Add
      reagent="dichloromethane"
      vessel="reactor"
      volume="250 mL" />
    <Stir
      vessel="reactor"
      time="5 mins" />
    <HeatChill
      vessel="reactor"
      temp="0°C"
      time="20 mins"
      stir="True" />
    <Add
      reagent="pivaloyl chloride"
      vessel="reactor"
      volume="12.9 mL"
      time="5 mins"
      stir="True" />
    <HeatChillToTemp
      vessel="reactor"
      temp="18°C"
      active="False"
      continue_heatchill="False"
      stir="True" />
    <HeatChill
      vessel="reactor"
      temp="23°C"
      time="6 hrs"
      stir="True" />
    <Add
      reagent="saturated aqueous ammonium chloride"
      vessel="reactor"
      volume="50 mL"
      stir="True" />
    <Transfer
      from_vessel="reactor"
      to_vessel="separator"
      volume="all" />
    <Add
      reagent="dichloromethane"
      vessel="separator"
      volume="50 mL"
      stir="True" />
    <Separate
      purpose="extract"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="separator"
      product_phase="bottom"
      solvent="dichloromethane"
      solvent_volume="50 mL"
      repeats="2" />
    <Separate
      purpose="wash"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="rotavap"
      product_phase="bottom"
      solvent="deionized water"
      solvent_volume="200 mL" />
    <Evaporate
      vessel="rotavap"
      temp="30°C"
      pressure="106.6576 mbar"
      time="30 mins"
      mode="auto" />
    <Dissolve
      vessel="rotavap"
      solvent="dichloromethane"
      volume="50 mL" />
    <FilterThrough
      from_vessel="rotavap"
      to_vessel="reactor"
      through="alumina" />
  </Procedure>

</Synthesis>
