<?xdl version="0.4.2" ?>

<Synthesis>
  <Hardware>
    <Component
      id="cartridge_MgSO4"
      type="cartridge"
      chemical="MgSO4" />
    <Component
      id="reactor"
      type="reactor" />
    <Component
      id="rotavap"
      type="rotavap" />
    <Component
      id="separator"
      type="separator" />
  </Hardware>

  <Reagents>
    <Reagent
      name="H2O" />
    <Reagent
      name="MTBE" />
    <Reagent
      name="methyl tert-butyl ether(MTBE)" />
    <Reagent
      name="saturated aqueous NaCl" />
  </Reagents>

  <Procedure>
    <Add
      reagent="MTBE"
      vessel="reactor"
      volume="50 mL" />
    <Separate
      purpose="extract"
      from_vessel="reactor"
      separation_vessel="separator"
      to_vessel="separator"
      product_phase="top"
      solvent="" />
    <Separate
      purpose="wash"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="separator"
      product_phase="top"
      solvent="H2O"
      solvent_volume="150 mL"
      repeats="3" />
    <Separate
      purpose="wash"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="rotavap"
      product_phase="top"
      solvent="saturated aqueous NaCl"
      through="MgSO4"
      solvent_volume="250 mL"
      repeats="2" />
    <Add
      reagent="methyl tert-butyl ether(MTBE)"
      vessel="rotavap"
      volume="50 mL"
      through="MgSO4" />
    <Evaporate
      vessel="rotavap"
      temp="40°C"
      pressure="303.3075 mbar"
      time="30 mins"
      mode="auto" />
    <Add
      reagent="MTBE"
      vessel="rotavap"
      volume="10 mL" />
    <Evaporate
      vessel="rotavap"
      temp="40°C"
      pressure="303.3075 mbar"
      time="30 mins"
      mode="auto" />
    <RunColumn
      from_vessel="rotavap"
      to_vessel="reactor"
      column="column" />
  </Procedure>

</Synthesis>
