<?xdl version="0.4.2" ?>

<Synthesis>
  <Hardware>
    <Component
      id="buffer_flask"
      type="buffer_flask" />
    <Component
      id="cartridge_Na2SO4"
      type="cartridge"
      chemical="Na2SO4" />
    <Component
      id="reactor"
      type="reactor" />
    <Component
      id="rotavap"
      type="rotavap" />
    <Component
      id="separator"
      type="separator" />
  </Hardware>

  <Reagents>
    <Reagent
      name="CH2Cl2" />
    <Reagent
      name="Et3N" />
    <Reagent
      name="compound 2" />
    <Reagent
      name="dichloromethane" />
    <Reagent
      name="methanesulfonyl chloride" />
    <Reagent
      name="saturated aqueous NH4Cl" />
    <Reagent
      name="saturated aqueous NaCl" />
    <Reagent
      name="saturated aqueous NaHCO3" />
  </Reagents>

  <Procedure>
    <Evaporate
      vessel="rotavap"
      temp="40°C"
      pressure="313.3067 mbar"
      time="30 mins"
      mode="auto" />
    <Add
      reagent="compound 2"
      vessel="rotavap"
      mass="14.7 g" />
    <Add
      reagent="CH2Cl2"
      vessel="rotavap"
      volume="175 mL" />
    <Transfer
      from_vessel="rotavap"
      to_vessel="reactor"
      volume="all" />
    <Add
      reagent="CH2Cl2"
      vessel="rotavap"
      volume="10 mL" />
    <Transfer
      from_vessel="rotavap"
      to_vessel="reactor"
      volume="10 mL" />
    <HeatChillToTemp
      vessel="reactor"
      temp="4°C"
      stir="True" />
    <Add
      reagent="Et3N"
      vessel="reactor"
      volume="16.6 mL"
      time="15 mins"
      stir="True" />
    <Add
      reagent="CH2Cl2"
      vessel="reactor"
      volume="5 mL"
      stir="True" />
    <Add
      reagent="methanesulfonyl chloride"
      vessel="reactor"
      volume="7.4 mL"
      time="20 mins"
      stir="True" />
    <Add
      reagent="CH2Cl2"
      vessel="reactor"
      volume="5 mL"
      stir="True" />
    <Stir
      vessel="reactor"
      time="15 mins" />
    <HeatChill
      vessel="reactor"
      temp="24°C"
      time="60 mins"
      stir="True" />
    <Add
      reagent="saturated aqueous NH4Cl"
      vessel="reactor"
      volume="150 mL"
      stir="True" />
    <Transfer
      from_vessel="reactor"
      to_vessel="separator"
      volume="all" />
    <Add
      reagent="CH2Cl2"
      vessel="reactor"
      volume="10 mL"
      stir="True" />
    <Transfer
      from_vessel="reactor"
      to_vessel="separator"
      volume="all" />
    <Separate
      purpose="extract"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="buffer_flask"
      product_phase="bottom"
      solvent=""
      waste_phase_to_vessel="separator" />
    <Separate
      purpose="extract"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="separator"
      product_phase="bottom"
      solvent="CH2Cl2"
      solvent_volume="150 mL"
      repeats="4" />
    <Transfer
      from_vessel="buffer_flask"
      to_vessel="separator"
      volume="all" />
    <Separate
      purpose="wash"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="separator"
      product_phase="bottom"
      solvent="saturated aqueous NH4Cl"
      solvent_volume="200 mL" />
    <Separate
      purpose="wash"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="separator"
      product_phase="bottom"
      solvent="saturated aqueous NaHCO3"
      solvent_volume="200 mL" />
    <Separate
      purpose="wash"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="rotavap"
      product_phase="bottom"
      solvent="saturated aqueous NaCl"
      through="Na2SO4"
      solvent_volume="200 mL" />
    <Add
      reagent="dichloromethane"
      vessel="rotavap"
      volume="25 mL"
      through="Na2SO4" />
    <Evaporate
      vessel="rotavap"
      temp="40°C"
      pressure="313.3067 mbar"
      time="30 mins"
      mode="auto" />
    <Add
      reagent="CH2Cl2"
      vessel="rotavap"
      volume="0" />
    <Evaporate
      vessel="rotavap"
      temp="40°C"
      pressure="313.3067 mbar"
      time="30 mins"
      mode="auto" />
    <Dry
      vessel="rotavap"
      time="6 hrs"
      temp="24°C"
      pressure="0.2 mbar" />
  </Procedure>

</Synthesis>
