<?xdl version="0.1.10" ?>

<Synthesis>
  <Hardware>
    <Component
      id="cartridge_MgSO4"
      type="cartridge"
      chemical="MgSO4" />
    <Component
      id="cartridge_silica-gel"
      type="cartridge"
      chemical="silica-gel" />
    <Component
      id="reactor"
      type="reactor" />
    <Component
      id="rotavap"
      type="rotavap" />
    <Component
      id="separator"
      type="separator" />
  </Hardware>

  <Reagents>
    <Reagent
      name="2 methylcyclohexanone" />
    <Reagent
      name="brine" />
    <Reagent
      name="hexane" />
    <Reagent
      name="saturated sodium bicarbonate solution" />
    <Reagent
      name="sodium iodide acetonitrile solution" />
    <Reagent
      name="t-butyldimethylsilyl chloride(TBDMSCl)" />
    <Reagent
      name="triethylamine" />
  </Reagents>

  <Procedure>
    <EvacuateAndRefill
      vessel="reactor" />
    <Add
      reagent="2 methylcyclohexanone"
      vessel="reactor"
      volume="10 mL"
      stir="False" />
    <Add
      reagent="triethylamine"
      vessel="reactor"
      volume="13.9 mL"
      stir="True" />
    <AddSolid
      reagent="t-butyldimethylsilyl chloride(TBDMSCl)"
      vessel="reactor"
      mass="15.1 g"
      stir="True" />
    <Add
      reagent="sodium iodide acetonitrile solution"
      vessel="reactor"
      volume="100 mL"
      time="30 mins"
      stir="True" />
    <HeatChill
      vessel="reactor"
      time="18 hrs"
      temp="500"
    />
    <Add
      reagent="saturated sodium bicarbonate solution"
      vessel="reactor"
      volume="100 mL"
      stir="True" />
    <Separate
      purpose="extract"
      from_vessel="reactor"
      separation_vessel="separator"
      to_vessel="separator"
      product_phase="top"
      solvent="hexane"
      to_port="top"
      solvent_volume="200 mL"
      repeats="2" />
    <Separate
      purpose="wash"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="rotavap"
      product_phase="top"
      solvent="brine"
      through="MgSO4"
      to_port="evaporate"
      solvent_volume="40 mL"
      repeats="1" />
    <Evaporate
      vessel="rotavap"
      temp="30°C"
      pressure="26.66 mbar"
      time="30 mins"
      mode="auto" />
    <FilterThrough
      from_vessel="rotavap"
      to_vessel="reactor"
      through="silica-gel"
      eluting_solvent="hexane"
      eluting_volume="1000 mL" />
  </Procedure>

</Synthesis>
