<?xdl version="0.1.10" ?>

<Synthesis>
  <Hardware>
    <Component
      id="cartridge_anhydrous MgSO4"
      type="cartridge"
      chemical="anhydrous MgSO4" />
    <Component
      id="reactor"
      type="reactor" />
    <Component
      id="rotavap"
      type="rotavap" />
    <Component
      id="separator"
      type="separator" />
  </Hardware>

  <Reagents>
    <Reagent
      name="2-thiophenecarboxaldehyde" />
    <Reagent
      name="K2CO3" />
    <Reagent
      name="MTBE" />
    <Reagent
      name="methanol" />
    <Reagent
      name="saturated NaCl solution" />
    <Reagent
      name="tosylmethylisocyanide" />
    <Reagent
      name="water" />
  </Reagents>

  <Procedure>
    <Add
      reagent="2-thiophenecarboxaldehyde"
      vessel="reactor"
      volume="9.4 mL"
      stir="False" />
    <AddSolid
      reagent="K2CO3"
      vessel="reactor"
      mass="24.19 g"
      stir="False" />
    <AddSolid
      reagent="tosylmethylisocyanide"
      vessel="reactor"
      mass="21.12 g"
      stir="False" />
    <Add
      reagent="methanol"
      vessel="reactor"
      volume="448 mL"
      stir="False" />
    <HeatChill
      vessel="reactor"
      temp="66°C"
      time="4 hrs" />
    <HeatChillToTemp
      vessel="reactor"
      temp="25°C"
      active="False" />
    <Add
      reagent="water"
      vessel="reactor"
      volume="224 mL"
      stir="True" />
    <Stir
      vessel="reactor"
      time="10 mins" />
    <Transfer
      from_vessel="reactor"
      to_vessel="rotavap"
      volume="all"
      to_port="evaporate" />
    <Evaporate
      vessel="rotavap"
      temp="45°C"
      pressure="84 mbar"
      time="30 mins"
      mode="auto" />
    <Separate
      purpose="extract"
      from_vessel="rotavap"
      separation_vessel="separator"
      to_vessel="separator"
      product_phase="top"
      solvent="MTBE"
      from_port="evaporate"
      to_port="top"
      solvent_volume="120 mL"
      repeats="3" />
    <Separate
      purpose="wash"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="separator"
      product_phase="top"
      solvent="water"
      to_port="top"
      solvent_volume="50 mL"
      repeats="1" />
    <Separate
      purpose="wash"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="rotavap"
      product_phase="top"
      solvent="saturated NaCl solution"
      through="anhydrous MgSO4"
      to_port="evaporate"
      solvent_volume="50 mL"
      repeats="1" />
    <Evaporate
      vessel="rotavap"
      temp="35°C"
      pressure="66.66 mbar"
      time="30 mins"
      mode="auto" />
  </Procedure>

</Synthesis>
