<Synthesis>
  <Metadata description="Source-grounded protocol representation; hardware execution requires compilation and review." publication="https://huggingface.co/datasets/open-reaction-database/ord-data/resolve/b6c89761dacf809d4082acbdbebe72042a08db91/data/d2/ord_dataset-d26118acda314269becc35db5c22dc59.parquet" reaction_class="Imidazole Arylation"/>
  <Hardware>
    <!--Analysis binding: {"component": "heater", "params": {"T_max_C": 310, "T_min_C": null, "rpm_max": 1500, "rpm_min": 50}, "verified": false, "wetted_materials": []}-->
    <Component id="heater" type="heater"/>
    <!--Analysis binding: {"component": "reactor", "params": {"T_max_C": null, "T_min_C": null, "capacity_mL": 50, "pressure_max_bar": null}, "verified": false, "wetted_materials": ["borosilicate_glass"]}-->
    <Component id="reactor" type="reactor"/>
  </Hardware>
  <Reagents>
    <!--r1: O=C([O-])C(C)(C)C.[Cs+]-->
    <Reagent name="r1" role="reagent"/>
    <!--r2: CC(C1=C(C2=CC=CC=C2P(C3CCCCC3)C4CCCCC4)C(C(C)C)=CC(C(C)C)=C1)C-->
    <Reagent name="r2" role="catalyst"/>
    <!--r3: CC(N(C)C)=O-->
    <Reagent name="r3" role="solvent"/>
    <!--r4: C=C[CH2-].C=C[CH2-].Cl[Pd+].Cl[Pd+]-->
    <Reagent name="r4" role="catalyst"/>
    <!--r5: Cn1cnc(C#N)c1-->
    <Reagent name="r5" role="substrate"/>
    <!--r6: Fc1ccccc1Br-->
    <Reagent name="r6" role="substrate"/>
    <!--r7: CC(C)(C)c1ccc(-c2ccc(C(C)(C)C)cc2)cc1-->
    <Reagent name="r7" role="reagent"/>
  </Reagents>
  <Procedure>
    <!--Analysis context: {"pressure_control": "SEALED", "reflux": false}-->
    <!--Pressure-control context: SEALED-->
    <Add vessel="reactor" reagent="r1" amount="0.045 mmol"/>
    <Add vessel="reactor" reagent="r2" amount="0.00075 mmol"/>
    <Add vessel="reactor" reagent="r3" amount="0.15 mL"/>
    <Add vessel="reactor" reagent="r4" amount="0.0003375 mmol"/>
    <Add vessel="reactor" reagent="r5" amount="0.03 mmol"/>
    <Add vessel="reactor" reagent="r6" amount="0.015 mmol"/>
    <Add vessel="reactor" reagent="r7" amount="0.015 mmol"/>
    <HeatChill vessel="reactor" temp="120 °C" time="86400 s" stir="true"/>
  </Procedure>
</Synthesis>
