<Synthesis>
  <Metadata description="Source-grounded protocol representation; hardware execution requires compilation and review." publication="https://chemrxiv.org/engage/chemrxiv/article-details/64c7e2e1658ec5f7e5808425" reaction_class="Aniline amide coupling reaction"/>
  <Hardware>
    <!--Analysis binding: {"component": "heater", "params": {"T_max_C": 310, "T_min_C": null, "rpm_max": 1500, "rpm_min": 50}, "verified": false, "wetted_materials": []}-->
    <Component id="heater" type="heater"/>
    <!--Analysis binding: {"component": "reactor", "params": {"T_max_C": null, "T_min_C": null, "capacity_mL": 50, "pressure_max_bar": null}, "verified": false, "wetted_materials": ["borosilicate_glass"]}-->
    <Component id="reactor" type="reactor"/>
  </Hardware>
  <Reagents>
    <!--r1: BOP-Cl-->
    <Reagent name="r1" role="reagent"/>
    <!--r2: Nc1cc(-c2ccccc2)nn1-c1ccccc1-->
    <Reagent name="r2" role="substrate"/>
    <!--r3: MeCN-->
    <Reagent name="r3" role="solvent"/>
    <!--r4: N-methylmorpholine-->
    <Reagent name="r4" role="reagent"/>
    <!--r5: indomethacin-->
    <Reagent name="r5" role="substrate"/>
    <!--r6: MeCN-->
    <Reagent name="r6" role="solvent"/>
  </Reagents>
  <Procedure>
    <!--Analysis context: {"pressure_control": "UNKNOWN", "reflux": false}-->
    <Add vessel="reactor" reagent="r1" amount="0.026 mmol"/>
    <Add vessel="reactor" reagent="r5" amount="0.02 mmol"/>
    <Add vessel="reactor" reagent="r6" amount="0.1 mL"/>
    <Add vessel="reactor" reagent="r4" amount="0.06 mmol"/>
    <Add vessel="reactor" reagent="r2" amount="0.03 mmol"/>
    <Add vessel="reactor" reagent="r3" amount="0.1 mL"/>
    <HeatChill vessel="reactor" temp="25 °C" time="86400 s" stir="true"/>
  </Procedure>
</Synthesis>
