<Synthesis>
  <Metadata description="Source-grounded protocol representation; hardware execution requires compilation and review." publication="https://chemrxiv.org/articles/preprint/Linking_Mechanistic_Analysis_of_Catalytic_Reactivity_Cliffs_to_Ligand_Classification/14388557" reaction_class="Ni-catalyzed C(sp2)-C(sp2) Suzuki-Miyaura coupling"/>
  <Hardware>
    <!--Analysis binding: {"component": "heater", "params": {"T_max_C": 310, "T_min_C": null, "rpm_max": 1500, "rpm_min": 50}, "verified": false, "wetted_materials": []}-->
    <Component id="heater" type="heater"/>
    <!--Analysis binding: {"component": "reactor", "params": {"T_max_C": null, "T_min_C": null, "capacity_mL": 50, "pressure_max_bar": null}, "verified": false, "wetted_materials": ["borosilicate_glass"]}-->
    <Component id="reactor" type="reactor"/>
  </Hardware>
  <Reagents>
    <!--r1: K3PO4-->
    <Reagent name="r1" role="reagent"/>
    <!--r2: dioxane-->
    <Reagent name="r2" role="solvent"/>
    <!--r3: Ni(cod)2-->
    <Reagent name="r3" role="catalyst"/>
    <!--r4: dioxane-->
    <Reagent name="r4" role="solvent"/>
    <!--r5: N(2-OMe-Ph)-Pyrrole-PCy2, cataCXiumPOMeCy-->
    <Reagent name="r5" role="catalyst"/>
    <!--r6: ClC1=CC=C(OC)C=C1-->
    <Reagent name="r6" role="substrate"/>
    <!--r7: dioxane-->
    <Reagent name="r7" role="solvent"/>
    <!--r8: OB(O)C1=CC=C(C(F)(F)F)C=C1-->
    <Reagent name="r8" role="substrate"/>
    <!--r9: water-->
    <Reagent name="r9" role="reagent"/>
    <!--r10: dioxane-->
    <Reagent name="r10" role="solvent"/>
  </Reagents>
  <Procedure>
    <!--Analysis context: {"inert_required": {"basis": "ORD.notes.is_sensitive_to_oxygen", "source_url": "https://huggingface.co/datasets/open-reaction-database/ord-data/resolve/b6c89761dacf809d4082acbdbebe72042a08db91/data/3b/ord_dataset-3b5db90e337942ea886b8f5bc5e3aa72.parquet"}, "pressure_control": "UNKNOWN", "reflux": false}-->
    <!--Atmosphere context (no purge operation inferred): nitrogen; environment-->
    <Add vessel="reactor" reagent="r1" amount="0.036 mmol"/>
    <Add vessel="reactor" reagent="r2" amount="0.06 mL"/>
    <Add vessel="reactor" reagent="r10" amount="0.04 mL"/>
    <Add vessel="reactor" reagent="r8" amount="0.016 mmol"/>
    <Add vessel="reactor" reagent="r9" amount="0.04 mmol"/>
    <Add vessel="reactor" reagent="r6" amount="0.008 mmol"/>
    <Add vessel="reactor" reagent="r7" amount="0.044 mL"/>
    <Add vessel="reactor" reagent="r3" amount="0.00016 mmol"/>
    <Add vessel="reactor" reagent="r4" amount="0.016 mL"/>
    <Add vessel="reactor" reagent="r5" amount="0.00032 mmol"/>
    <HeatChill vessel="reactor" temp="60 °C" time="7200 s" stir="true"/>
  </Procedure>
</Synthesis>
