<?xdl version="0.5.0" ?>

<Synthesis>

  <Hardware>
    <Component
      id="cartridge_MgSO4"
      type="cartridge"
      chemical="MgSO4" />
    <Component
      id="reactor"
      type="reactor" />
    <Component
      id="rotavap"
      type="rotavap" />
    <Component
      id="separator"
      type="separator" />
  </Hardware>

  <Reagents>
    <Reagent
      name="6.2mM aqueous K2CO3/KHCO3"
      role="reagent" />
    <Reagent
      name="brine"
      role="reagent" />
    <Reagent
      name="chloroform"
      role="reagent" />
    <Reagent
      name="methanol"
      role="reagent" />
    <Reagent
      name="p-tolyl 2-(trimethylsilyl)ethynyl sulfone"
      role="reagent" />
    <Reagent
      name="water"
      role="reagent" />
  </Reagents>

  <Procedure>
    <AddSolid
      vessel="reactor"
      reagent="p-tolyl 2-(trimethylsilyl)ethynyl sulfone"
      mass="25.2 g" />
    <Add
      vessel="reactor"
      reagent="methanol"
      volume="300 mL" />
    <HeatChill
      vessel="reactor"
      temp="25 °C"
      time="30 min"
      stir="True" />

    <Add
      vessel="reactor"
      reagent="6.2mM aqueous K2CO3/KHCO3"
      volume="350 mL"
      time="3.5 h"
      stir="True" />

    <Add
      vessel="reactor"
      reagent="water"
      volume="200 mL"
      stir="True" />
    <Separate
      purpose="extract"
      from_vessel="reactor"
      separation_vessel="separator"
      to_vessel="separator"
      product_phase="bottom"
      solvent="chloroform"
      solvent_volume="100 mL"
      repeats="4" />
    <Separate
      purpose="wash"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="separator"
      product_phase="bottom"
      solvent="water"
      solvent_volume="100 mL"
      repeats="3" />
    <Separate
      purpose="wash"
      from_vessel="separator"
      separation_vessel="separator"
      to_vessel="rotavap"
      product_phase="bottom"
      solvent="brine"
      through="MgSO4"
      solvent_volume="100 mL"
      repeats="2" />
    <Evaporate
      vessel="rotavap"
      temp="40 °C"
      pressure="197 mbar"
      time="30 min"
      mode="auto" />
    <Dry
      vessel="rotavap"
      time="30 min"
      temp="50 °C" />
  </Procedure>

</Synthesis>
